---
API: 3
OpenSesame: 4.1.9
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "Test RFID reader"
set subject_parity even
set subject_nr 0
set start test_loop
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/sebastiaan/git/omm-client/osexp"
set disable_garbage_collection yes
set description "Entry point for connecting to an OMM server"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define repeat_cycle be_infinite
	set description "Optionally repeat a cycle from a loop"
	set condition "[participant] != q"

define omm_detect_participant detect
	set serial_port COM7
	set participant_variable participant
	set min_rep 1
	set detector rfid
	set description "A plugin to detect participants based on an RFID chip"

define feedback show_rfid
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="RFID: {participant}" x=0 y=0 z_index=0

define loop test_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run test_sequence

define sequence test_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run wait always
	run detect always
	run show_rfid always
	run be_infinite always

define sketchpad wait
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Waiting for RFID chip or keypress ...<br /><br />Press q to exit" x=0 y=0 z_index=0

